/gate/source/addSource photon_source
/gate/source/photon_source/gps/type Point
/gate/source/photon_source/gps/centre 0. 0. 0. cm

/gate/source/photon_source/setActivity 100000. Bq
/gate/source/photon_source/gps/particle opticalphoton
/gate/source/photon_source/gps/angtype iso

/gate/source/photon_source/gps/ene/type User
/gate/source/photon_source/gps/hist/type energy
/gate/source/photon_source/gps/emin 2.4454 eV
/gate/source/photon_source/gps/emax 3.5024 eV

/gate/source/photon_source/gps/hist/point 0.0000024454 270
/gate/source/photon_source/gps/hist/point 0.0000024503 572
/gate/source/photon_source/gps/hist/point 0.0000024551 874
/gate/source/photon_source/gps/hist/point 0.0000024600 1176
/gate/source/photon_source/gps/hist/point 0.0000024649 1479
/gate/source/photon_source/gps/hist/point 0.0000024698 1781
/gate/source/photon_source/gps/hist/point 0.0000024747 2083
/gate/source/photon_source/gps/hist/point 0.0000024797 2385
/gate/source/photon_source/gps/hist/point 0.0000024847 2687
/gate/source/photon_source/gps/hist/point 0.0000024896 2990
/gate/source/photon_source/gps/hist/point 0.0000024947 3292
/gate/source/photon_source/gps/hist/point 0.0000024997 3594
/gate/source/photon_source/gps/hist/point 0.0000025047 3896
/gate/source/photon_source/gps/hist/point 0.0000025098 4198
/gate/source/photon_source/gps/hist/point 0.0000025149 4500
/gate/source/photon_source/gps/hist/point 0.0000025200 4803
/gate/source/photon_source/gps/hist/point 0.0000025251 5105
/gate/source/photon_source/gps/hist/point 0.0000025303 5407
/gate/source/photon_source/gps/hist/point 0.0000025355 5709
/gate/source/photon_source/gps/hist/point 0.0000025407 6011
/gate/source/photon_source/gps/hist/point 0.0000025459 6314
/gate/source/photon_source/gps/hist/point 0.0000025511 6616
/gate/source/photon_source/gps/hist/point 0.0000025564 6918
/gate/source/photon_source/gps/hist/point 0.0000025617 7220
/gate/source/photon_source/gps/hist/point 0.0000025670 7522
/gate/source/photon_source/gps/hist/point 0.0000025723 7824
/gate/source/photon_source/gps/hist/point 0.0000025776 8127
/gate/source/photon_source/gps/hist/point 0.0000025830 8444
/gate/source/photon_source/gps/hist/point 0.0000025884 8781
/gate/source/photon_source/gps/hist/point 0.0000025938 9119
/gate/source/photon_source/gps/hist/point 0.0000025992 9728
/gate/source/photon_source/gps/hist/point 0.0000026047 10343
/gate/source/photon_source/gps/hist/point 0.0000026102 10790
/gate/source/photon_source/gps/hist/point 0.0000026157 10784
/gate/source/photon_source/gps/hist/point 0.0000026212 11167
/gate/source/photon_source/gps/hist/point 0.0000026268 11783
/gate/source/photon_source/gps/hist/point 0.0000026324 12398
/gate/source/photon_source/gps/hist/point 0.0000026380 12728
/gate/source/photon_source/gps/hist/point 0.0000026436 13030
/gate/source/photon_source/gps/hist/point 0.0000026492 13419
/gate/source/photon_source/gps/hist/point 0.0000026549 14092
/gate/source/photon_source/gps/hist/point 0.0000026606 14777
/gate/source/photon_source/gps/hist/point 0.0000026663 15410
/gate/source/photon_source/gps/hist/point 0.0000026721 16026
/gate/source/photon_source/gps/hist/point 0.0000026778 16641
/gate/source/photon_source/gps/hist/point 0.0000026836 17257
/gate/source/photon_source/gps/hist/point 0.0000026895 17872
/gate/source/photon_source/gps/hist/point 0.0000026953 18623
/gate/source/photon_source/gps/hist/point 0.0000027012 19649
/gate/source/photon_source/gps/hist/point 0.0000027071 20681
/gate/source/photon_source/gps/hist/point 0.0000027130 22013
/gate/source/photon_source/gps/hist/point 0.0000027190 23394
/gate/source/photon_source/gps/hist/point 0.0000027249 24589
/gate/source/photon_source/gps/hist/point 0.0000027309 25518
/gate/source/photon_source/gps/hist/point 0.0000027370 26447
/gate/source/photon_source/gps/hist/point 0.0000027430 27688
/gate/source/photon_source/gps/hist/point 0.0000027491 29068
/gate/source/photon_source/gps/hist/point 0.0000027552 30494
/gate/source/photon_source/gps/hist/point 0.0000027613 32044
/gate/source/photon_source/gps/hist/point 0.0000027675 33704
/gate/source/photon_source/gps/hist/point 0.0000027737 35433
/gate/source/photon_source/gps/hist/point 0.0000027799 37207
/gate/source/photon_source/gps/hist/point 0.0000027862 39140
/gate/source/photon_source/gps/hist/point 0.0000027924 41129
/gate/source/photon_source/gps/hist/point 0.0000027987 43412
/gate/source/photon_source/gps/hist/point 0.0000028051 45747
/gate/source/photon_source/gps/hist/point 0.0000028114 48082
/gate/source/photon_source/gps/hist/point 0.0000028178 50417
/gate/source/photon_source/gps/hist/point 0.0000028242 52807
/gate/source/photon_source/gps/hist/point 0.0000028307 55229
/gate/source/photon_source/gps/hist/point 0.0000028372 57651
/gate/source/photon_source/gps/hist/point 0.0000028437 60073
/gate/source/photon_source/gps/hist/point 0.0000028502 62498
/gate/source/photon_source/gps/hist/point 0.0000028568 65135
/gate/source/photon_source/gps/hist/point 0.0000028634 67861
/gate/source/photon_source/gps/hist/point 0.0000028700 70796
/gate/source/photon_source/gps/hist/point 0.0000028767 73911
/gate/source/photon_source/gps/hist/point 0.0000028834 77026
/gate/source/photon_source/gps/hist/point 0.0000028901 80165
/gate/source/photon_source/gps/hist/point 0.0000028968 84008
/gate/source/photon_source/gps/hist/point 0.0000029036 88033
/gate/source/photon_source/gps/hist/point 0.0000029104 91186
/gate/source/photon_source/gps/hist/point 0.0000029173 94484
/gate/source/photon_source/gps/hist/point 0.0000029242 98639
/gate/source/photon_source/gps/hist/point 0.0000029311 102790
/gate/source/photon_source/gps/hist/point 0.0000029380 106887
/gate/source/photon_source/gps/hist/point 0.0000029450 110959
/gate/source/photon_source/gps/hist/point 0.0000029520 115031
/gate/source/photon_source/gps/hist/point 0.0000029590 119370
/gate/source/photon_source/gps/hist/point 0.0000029661 124973
/gate/source/photon_source/gps/hist/point 0.0000029732 130577
/gate/source/photon_source/gps/hist/point 0.0000029804 135905
/gate/source/photon_source/gps/hist/point 0.0000029876 141038
/gate/source/photon_source/gps/hist/point 0.0000029948 147979
/gate/source/photon_source/gps/hist/point 0.0000030020 153665
/gate/source/photon_source/gps/hist/point 0.0000030093 159645
/gate/source/photon_source/gps/hist/point 0.0000030166 165867
/gate/source/photon_source/gps/hist/point 0.0000030240 172208
/gate/source/photon_source/gps/hist/point 0.0000030314 179201
/gate/source/photon_source/gps/hist/point 0.0000030388 186201
/gate/source/photon_source/gps/hist/point 0.0000030463 193939
/gate/source/photon_source/gps/hist/point 0.0000030538 201033
/gate/source/photon_source/gps/hist/point 0.0000030613 208032
/gate/source/photon_source/gps/hist/point 0.0000030689 214970
/gate/source/photon_source/gps/hist/point 0.0000030765 221878
/gate/source/photon_source/gps/hist/point 0.0000030842 228808
/gate/source/photon_source/gps/hist/point 0.0000030919 235800
/gate/source/photon_source/gps/hist/point 0.0000030996 242660
/gate/source/photon_source/gps/hist/point 0.0000031074 247688
/gate/source/photon_source/gps/hist/point 0.0000031152 251873
/gate/source/photon_source/gps/hist/point 0.0000031230 255730
/gate/source/photon_source/gps/hist/point 0.0000031309 259348
/gate/source/photon_source/gps/hist/point 0.0000031388 262150
/gate/source/photon_source/gps/hist/point 0.0000031468 264875
/gate/source/photon_source/gps/hist/point 0.0000031548 267424
/gate/source/photon_source/gps/hist/point 0.0000031629 269205
/gate/source/photon_source/gps/hist/point 0.0000031710 269890
/gate/source/photon_source/gps/hist/point 0.0000031791 270482
/gate/source/photon_source/gps/hist/point 0.0000031873 269712
/gate/source/photon_source/gps/hist/point 0.0000031955 268759
/gate/source/photon_source/gps/hist/point 0.0000032037 267050
/gate/source/photon_source/gps/hist/point 0.0000032120 263352
/gate/source/photon_source/gps/hist/point 0.0000032204 259205
/gate/source/photon_source/gps/hist/point 0.0000032288 254183
/gate/source/photon_source/gps/hist/point 0.0000032372 247464
/gate/source/photon_source/gps/hist/point 0.0000032457 241629
/gate/source/photon_source/gps/hist/point 0.0000032542 230006
/gate/source/photon_source/gps/hist/point 0.0000032627 217337
/gate/source/photon_source/gps/hist/point 0.0000032714 202501
/gate/source/photon_source/gps/hist/point 0.0000032800 187523
/gate/source/photon_source/gps/hist/point 0.0000032887 171139
/gate/source/photon_source/gps/hist/point 0.0000032975 154395
/gate/source/photon_source/gps/hist/point 0.0000033062 136881
/gate/source/photon_source/gps/hist/point 0.0000033151 119773
/gate/source/photon_source/gps/hist/point 0.0000033240 102209
/gate/source/photon_source/gps/hist/point 0.0000033329 85325
/gate/source/photon_source/gps/hist/point 0.0000033419 73297
/gate/source/photon_source/gps/hist/point 0.0000033509 62399
/gate/source/photon_source/gps/hist/point 0.0000033600 54580
/gate/source/photon_source/gps/hist/point 0.0000033691 47204
/gate/source/photon_source/gps/hist/point 0.0000033783 41172
/gate/source/photon_source/gps/hist/point 0.0000033875 34715
/gate/source/photon_source/gps/hist/point 0.0000033968 28927
/gate/source/photon_source/gps/hist/point 0.0000034062 24715
/gate/source/photon_source/gps/hist/point 0.0000034155 20505
/gate/source/photon_source/gps/hist/point 0.0000034250 16517
/gate/source/photon_source/gps/hist/point 0.0000034345 13359
/gate/source/photon_source/gps/hist/point 0.0000034440 10643
/gate/source/photon_source/gps/hist/point 0.0000034536 8887
/gate/source/photon_source/gps/hist/point 0.0000034632 7153
/gate/source/photon_source/gps/hist/point 0.0000034729 5679
/gate/source/photon_source/gps/hist/point 0.0000034827 4271
/gate/source/photon_source/gps/hist/point 0.0000034925 2563
/gate/source/photon_source/gps/hist/point 0.0000035024 538

/gate/source/photon_source/gps/polarization 1 0 0

/gate/source/list
